{
   "cfgformat":"20181205",
   "comments":{
      "author":"Stijn van de Schoot, Amsterdam UMC",
      "version":"20181205",
      "description":"WAD2 module for PET QC analysis",
      "creator":"Scite"
   },
   "info":{
      "petQC_analysis":{
         "params":{
            "ROI_radius":"The radius of the ROI (cm).",
            "included_slices":"The DICOM Instance Numbers included in the analysis. Always use this format for definition: [x1,x2,...,xN].",
            "threshold_value":"Threshold value used to detect the phantom on the 2D image."
         }
      },
      "dataVerification":{
         "params":{
            "units":"Units of the pixel values. (recommended unit: 'BQML')",
            "image_type":"Image type of the data.",
            "slice_thickness":"Thickness of the DICOM slice.",
            "protocol_name":"The name of the scan protocol."
         }
      },
      "phantomActivity":{
         "params":{
            "corrFactor_calibration":"Correction factor of the calibration based on mean calibration deviation of uncorrected reconstructions.",
            "calibration_date":"Calibration date (YYYYMMDD): date of phantom calibration.",
            "ref_activity":"Reference activity (MBq): activity at the moment of calibration",
            "half_life":"Half life (days): time required for the phantom activity to reduce to half its initial value.",
            "phantom_volume":"Phantom volume (ml): the volume of the phantom.",
            "phantom_name":"Phantom name: internal ID of the phantom."
         }
      },
      "acqDateTime":{
         "params":{
            
         }
      }
   },
   "actions":{
      "petQC_analysis":{
         "filters":{
            
         },
         "params":{
            "ROI_radius":"8.5",
            "included_slices":"[10,20,30]",
            "threshold_value":"100"
         }
      },
      "dataVerification":{
         "filters":{
            
         },
         "params":{
            "units":"BQML",
            "image_type":[
               "ORIGINAL",
               "PRIMARY"
            ],
            "slice_thickness":"4",
            "protocol_name":"QC 50M"
         }
      },
      "phantomActivity":{
         "filters":{
            
         },
         "params":{
            "corrFactor_calibration":"1.02",
            "calibration_date":"20230919",
            "ref_activity":"104.74",
            "half_life":"270.8",
            "phantom_volume":"9208",
            "phantom_name":"Intern bronnummer X"
         }
      },
      "acqDateTime":{
         "filters":{
            
         },
         "params":{
            
         }
      }
   }
}
